---
API: 2
OpenSesame: 3.1.4
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Spectral Analysis  Facial emotion expression recognition "
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Michael\\Desktop\\2016_SLABY_Facial_emotion_expression_recognition\\spectra_paradigm"
set disable_garbage_collection yes
set description "BP Lukas Slaby"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background black

define sketchpad end_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Experiment je u konce. Stikněte libovolné tlačítko pro ukončení." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run initialize always
	run instruction always
	run start_recording always
	run new_loop always
	run stop_recording always
	run end_instruction always

define sketchpad fixation
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="+" x=0 y=0 z_index=0

define inline_script initialize
	set description "Executes Python code"
	___run__
	try:
		from ctypes import windll
		global io
		io = windll.dlportio # requires dlportio.dll !!!
	except:
		print 'The parallel port couldn\'t be opened'
	__end__
	set _prepare ""

define sketchpad instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="V následujícím experimentu uvidíte<br />tváře vyjadřující nějakou emoci.<br />Vaším úkolem je pozorně sledovat <br />prezentaci jednotlivých snímků. <br />Během prezentace se pokuste<br />nemrkat a nehýbat.<br /><br /><br />Pro pokračování stikněte <br />libovolnou klávesu." x=32 y=32 z_index=0

define logger log_variables
	set description "Logs experimental data"
	set auto_log yes

define sequence main_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run send_tag always
	run stimulation always
	run log_variables always

define loop new_loop
	set source_file "stimuli_sourceSP.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 799
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 source_image ""
	setcycle 0 emotion ""
	setcycle 0 trigger ""
	setcycle 1 source_image ""
	setcycle 1 emotion ""
	setcycle 1 trigger ""
	setcycle 2 source_image ""
	setcycle 2 emotion ""
	setcycle 2 trigger ""
	setcycle 3 source_image ""
	setcycle 3 emotion ""
	setcycle 3 trigger ""
	setcycle 4 source_image ""
	setcycle 4 emotion ""
	setcycle 4 trigger ""
	setcycle 5 source_image ""
	setcycle 5 emotion ""
	setcycle 5 trigger ""
	setcycle 6 source_image ""
	setcycle 6 emotion ""
	setcycle 6 trigger ""
	setcycle 7 source_image ""
	setcycle 7 emotion ""
	setcycle 7 trigger ""
	setcycle 8 source_image ""
	setcycle 8 emotion ""
	setcycle 8 trigger ""
	setcycle 9 source_image ""
	setcycle 9 emotion ""
	setcycle 9 trigger ""
	setcycle 10 source_image ""
	setcycle 10 emotion ""
	setcycle 10 trigger ""
	setcycle 11 source_image ""
	setcycle 11 emotion ""
	setcycle 11 trigger ""
	setcycle 12 source_image ""
	setcycle 12 emotion ""
	setcycle 12 trigger ""
	setcycle 13 source_image ""
	setcycle 13 emotion ""
	setcycle 13 trigger ""
	setcycle 14 source_image ""
	setcycle 14 emotion ""
	setcycle 14 trigger ""
	setcycle 15 source_image ""
	setcycle 15 emotion ""
	setcycle 15 trigger ""
	setcycle 16 source_image ""
	setcycle 16 emotion ""
	setcycle 16 trigger ""
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	run main_sequence

define inline_script send_tag
	set description "Executes Python code"
	___run__
	try:
		global io
		trigger = var.TRIGGER
		port = 0xCFF8
		io.DlPortWritePortUchar(port, trigger)  # Send you trigger (int 1)
		self.sleep(50)  # Uses trigger pulse for 50 ms
		io.DlPortWritePortUchar(port, 0)    # Get back to zero after 50 ms
	except:
		print 'The parallel port couldn\'t be opened'
	__end__
	set _prepare ""

define inline_script start_recording
	set description "Executes Python code"
	___run__
	try:
		global io
		port = 0xCFF8
		io.DlPortWritePortUchar(port, 254)  # Send you trigger (int 1)
		self.sleep(50)  # Uses trigger pulse for 50 ms
		io.DlPortWritePortUchar(port, 0)    # Get back to zero after 50 ms
	except:
		print 'The parallel port couldn\'t be opened'
	__end__
	set _prepare ""

define sketchpad stimulation
	set duration 1000
	set description "Displays stimuli"
	draw image center=1 file="source/[SOURCE]" scale=0.5 show_if=always x=0 y=0 z_index=0

define inline_script stop_recording
	set description "Executes Python code"
	___run__
	try:
		global io
		port = 0xCFF8
		io.DlPortWritePortUchar(port, 255)  # Send you trigger (int 1)
		self.sleep(50)  # Uses trigger pulse for 50 ms
		io.DlPortWritePortUchar(port, 0)    # Get back to zero after 50 ms
	except:
		print 'The parallel port couldn\'t be opened'
	__end__
	set _prepare ""

